PsychoPy2experiment version="2022.3.0dev6"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = breath_holding_task
  keyboardBackend = ioHub
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Routines
  Routine breath_in
    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine breath_out
    PolygonComponent polygon_2
      fillColor = 1.0000, 0.2941, -1.0000
      lineColor = 1.0000, 0.2941, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine hold
    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine test_block_end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = End of test block
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  Routine test_block_end_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Test block conducted
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  Routine intro
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for trigger. To proceed manually press "t".
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    KeyboardComponent key_resp
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breath
    PolygonComponent polygon_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent polygon_5
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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  Routine breath_last
    PolygonComponent polygon_6
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent polygon_7
      fillColor = 0.9608, 0.0039, -0.1059
      lineColor = 0.9608, 0.0039, -0.1059
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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Flow
  Routine intro
  LoopInitiator normal_respiratory_rate loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine breath
  LoopTerminator normal_respiratory_rate
  Routine breath_last
  Routine hold
  Routine test_block_end
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator normal_respiratory_rate_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine breath
    LoopTerminator normal_respiratory_rate_2
    Routine breath_last
    Routine hold
  LoopTerminator trials
  LoopInitiator normal_respiratory_rate_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine breath
  LoopTerminator normal_respiratory_rate_3
