PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = calibration
  keyboardBackend = ioHub
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Routines
  Routine trial
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
