PsychoPy2experiment version="2022.3.0dev6"
Settings
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2022.3.0dev6
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = resting_state
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine resting
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      syncScreenRefresh = False
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    MovieComponent movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      movie = /home/esavary/Downloads/Private Island 🏝 Beach Walking Tour Motu Tane, Bora Bora, French Polynesia 🇵🇫 4K Ultra HD Travel.mp4
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
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  Routine intro
    KeyboardComponent key_resp
      allowedKeys = 't', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Resting state block - waiting for trigger or manual trigger (hit 's')
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine intro
  Routine resting
